PsychoPy2experiment version="2020.2.10"
Settings
  Experiment info = {'session': '001', 'participant': ''}
  Force stereo = False
  Full-screen window = True
  Monitor = testMonitor
  Save excel file = True
  Screen = 1
  Units = height
  Window size (pixels) = [1536, 864]
  expName = VR Questionnaire
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Routines
  Routine trial
    TextComponent Instructions
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 25
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      text:
        VR Questionnaire

        Please respond with the best answer for each of the following questions.
        To select an answer, press the number shown before the answer choice.


        Press any key to continue.
    KeyboardComponent instructions
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine Q2
    TextComponent Q1_
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Section 1

        Usability of the current environment



        Press any key to continue.
    KeyboardComponent Q1_2
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine Q3
    TextComponent Q2_
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 3
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      text:
        I thought the virtual reality system was easy to use:

        1. Strongly agree   2. Somewhat agree   3. Neither agree or disagree
        4. Somewhat disagree   5. Strongly disagree
    KeyboardComponent Q2_2
      allowedKeys = '1','2','3','4','5'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = first key
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  Routine Q4
    KeyboardComponent Q3_2
      allowedKeys = '1','2','3','4','5','6','7'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = first key
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    TextComponent Q3_
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 3
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      text:
        I quickly adjusted to the virtual environment experience:

        1. Strongly agree   2. Somewhat agree   3. Neither agree or disagree
        4. Somewhat disagree   5. Strongly disagree
  Routine Q5
    KeyboardComponent Q4_2
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent Q4_
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 3
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      text:
        Presence Questionnaire (PQ)

        All questions use a seven point Likert scale from 1 to 7 where 1 is equivalent to
        “not responsive”/“not compelling” etc. and 7 is equivalent to “very responsive”/
        “very compelling” etc.


        Press any key to continue.
  Routine Q6
    KeyboardComponent Q5_2
      allowedKeys = '1','2','3','4','5','6','7'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = first key
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    TextComponent Q5_
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 3
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      text:
        How responsive was the environment to actions that you initiated (or performed)?

        Not responsive  1   2   3   4   5   6   7   Very responsive
  Routine Q7
    KeyboardComponent Q6_2
      allowedKeys = '1','2','3','4','5','6','7'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = first key
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    TextComponent Q6_
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 3
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      text:
        How completely were you able to actively survey or search the environment using vision?

        Not at all  1   2   3   4   5   6   7   Completely
  Routine Q8
    KeyboardComponent Q7_2
      allowedKeys = '1','2','3','4','5','6','7'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = first key
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    TextComponent Q7_
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 3
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      text:
        How compelling was your sense of moving around inside the virtual environment?

        Not compelling  1   2   3   4   5   6   7   Very compelling
  Routine Q9
    KeyboardComponent Q8_2
      allowedKeys = '1','2','3','4','5','6','7'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = first key
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    TextComponent Q8_
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 3
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      text:
        How well could you examine objects from multiple viewpoints?

        Not at all  1   2   3   4   5   6   7   Completely
  Routine Q11
    KeyboardComponent Q9_2
      allowedKeys = '1','2','3','4','5','6','7'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = first key
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    TextComponent Q10_
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 3
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      text:
        How much delay did you experience between your actions and expected outcomes?

        No delay  1   2   3   4   5   6   7   A lot of delay
  Routine Q12
    KeyboardComponent Q10_2
      allowedKeys = '1','2','3','4','5','6','7'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = first key
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    TextComponent Q11_
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 3
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      text:
        How much did the visual display quality interfere or distract you from
        performing assigned tasks or required activities?

        Not at all distracting  1   2   3   4   5   6   7   Very distracting
  Routine Q13
    KeyboardComponent Q11_2
      allowedKeys = '1','2','3','4','5','6','7'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = first key
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    TextComponent Q12_
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 3
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      text:
        How much did the control devices interfere with the performance
        of assigned tasks or with other activities?

        No interference  1   2   3   4   5   6   7   A lot of interference
  Routine Q14
    KeyboardComponent Q12_2
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent Q13_
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 3
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      text:
        Section 3

        Motion Sickness



        Press any key to continue.
  Routine Q15
    TextComponent Q14_
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 3
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      text:
        How much did motion sickness/nausea did you experience during the task?

        No motion sickness  1   2   3   4   5   6   7   Very nauseous
    KeyboardComponent Q13_2
      allowedKeys = '1','2','3','4','5','6','7'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = first key
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  Routine Q16
    KeyboardComponent Q14_2
      allowedKeys = '1','2','3','4','5','6','7'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = first key
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    TextComponent Q15_1
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 3
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      text:
        How much motion sickness interfere or distract you from performing
        assigned tasks or required activities?

        Not at all distracting  1   2   3   4   5   6   7   Very distracting
  Routine Q17
    TextComponent Thank_you
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 3
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      text:
        Thank you!

        Press any key to exit.
    KeyboardComponent thank_you
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine Q18
    TextComponent Q16_
      letterHeight = 0.04
      pos = (0, 0.15)
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 3
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      text:
        If you experienced any of the following symptoms, please type their corresponding
        number in the textbox provided (mark all that apply). If you did not experience
        any of these symptoms, please type "N/A".

        1. Dizziness       2. Overheating       3. Nausea
        4. Sweatiness       5. Thirst
    TextboxComponent textbox
      bold = False
      editable = True
      letterHeight = 0.04
      padding = None
      pos = (0, -0.15)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = Type here: 
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    MouseComponent Q16_mouse
      clickable = Q16_text
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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    TextComponent Q16_text
      color = black
      letterHeight = 0.04
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Click here to continue once you are done.
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Flow
  Routine trial
  Routine Q2
  Routine Q3
  Routine Q4
  Routine Q5
  Routine Q6
  Routine Q7
  Routine Q8
  Routine Q9
  Routine Q11
  Routine Q12
  Routine Q13
  Routine Q14
  Routine Q15
  Routine Q16
  Routine Q18
  Routine Q17
